PsychoPy2experiment version="1.77.00"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = functional_localizer
  Units = use prefs
  Screen = 1
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Routines
  Routine blocks
    ImageComponent primary_image
      opacity = 0.5
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.0
      image [set every repeat] = $primary_placeholder
      size = [1, 1]
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    CodeComponent code
      End Routine:
        blockcount=blockcount+1
        if blockcount==48:
            primary_stimlist.finished=1
            second_stimlist.finished=1
    ImageComponent secondary_image
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.0
      image [set every repeat] = $secondary_placeholder
      size = [0.5, 0.5]
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  Routine fixation_2
    ImageComponent fixation_image_2
      stopVal [duration (s)] = .25
      startVal [time (s)] = 0.0
      image = stimulus/fixation.png
      size = [1,1]
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  Routine fixation
    ImageComponent fixation_image
      stopVal [duration (s)] = 36
      startVal [time (s)] = 0.0
      image = stimulus/fixation.png
      size = [1,1]
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  Routine instruction
    TextComponent instr
      text [set every repeat] = $instruction_text
      stopVal [duration (s)] = ins_placeholder
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_3
      End Routine:
        blockcount=0
  Routine pretrigger_instr
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Instructions:

        Please pay attention to the images
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trigger
    TextComponent text
      text = Waiting for scanner trigger ...
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine pretrigger_instr
  Routine trigger
  Routine fixation
  LoopInitiator stimulus_type loopType="TrialHandler"
    conditionsFile = conditions/functional_localizer_conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'instruction_text': u'', 'instruction_length': 0, 'stimulus_list': u'face', 'stimulus_list3': u'', 'stimulus_list2': u'', 'conditions': u'Faces'},
      {'instruction_text': u'Attend to House', 'instruction_length': 2, 'stimulus_list': u'face', 'stimulus_list3': u'', 'stimulus_list2': u'scene', 'conditions': u'Attend to house'},
      {'instruction_text': u'', 'instruction_length': 0, 'stimulus_list': u'scene', 'stimulus_list3': u'', 'stimulus_list2': u'', 'conditions': u'Scenes'},
      {'instruction_text': u'Attend to Face', 'instruction_length': 2, 'stimulus_list': u'face', 'stimulus_list3': u'', 'stimulus_list2': u'scene', 'conditions': u'Attend to face'},
      {'instruction_text': u'', 'instruction_length': 0, 'stimulus_list': u'', 'stimulus_list3': u'fixation', 'stimulus_list2': u'', 'conditions': u'Fixation'},
      {'instruction_text': u'', 'instruction_length': 0, 'stimulus_list': u'scene', 'stimulus_list3': u'', 'stimulus_list2': u'', 'conditions': u'Scenes'},
      {'instruction_text': u'Attend to Face', 'instruction_length': 2, 'stimulus_list': u'face', 'stimulus_list3': u'', 'stimulus_list2': u'scene', 'conditions': u'Attend to face'},
      {'instruction_text': u'', 'instruction_length': 0, 'stimulus_list': u'face', 'stimulus_list3': u'', 'stimulus_list2': u'', 'conditions': u'Faces'},
      {'instruction_text': u'Attend to House', 'instruction_length': 2, 'stimulus_list': u'face', 'stimulus_list3': u'', 'stimulus_list2': u'scene', 'conditions': u'Attend to house'}]
    Routine instruction
    LoopInitiator primary_stimlist loopType="TrialHandler"
      conditionsFile = conditions/fouse_stimuli_facelist.csv
      random seed = seed_holder
      loopType = random
      nReps = 1
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      conditions:
        [{'face': u'stimulus/Faces/face000.jpg'},
        {'face': u'stimulus/Faces/face001.jpg'},
        {'face': u'stimulus/Faces/face002.jpg'},
        {'face': u'stimulus/Faces/face003.jpg'},
        {'face': u'stimulus/Faces/face004.jpg'},
        {'face': u'stimulus/Faces/face005.jpg'},
        {'face': u'stimulus/Faces/face006.jpg'},
        {'face': u'stimulus/Faces/face007.jpg'},
        {'face': u'stimulus/Faces/face008.jpg'},
        {'face': u'stimulus/Faces/face009.jpg'},
        {'face': u'stimulus/Faces/face010.jpg'},
        {'face': u'stimulus/Faces/face011.jpg'},
        {'face': u'stimulus/Faces/face012.jpg'},
        {'face': u'stimulus/Faces/face013.jpg'},
        {'face': u'stimulus/Faces/face014.jpg'},
        {'face': u'stimulus/Faces/face015.jpg'},
        {'face': u'stimulus/Faces/face016.jpg'},
        {'face': u'stimulus/Faces/face017.jpg'},
        {'face': u'stimulus/Faces/face018.jpg'},
        {'face': u'stimulus/Faces/face019.jpg'},
        {'face': u'stimulus/Faces/face020.jpg'},
        {'face': u'stimulus/Faces/face021.jpg'},
        {'face': u'stimulus/Faces/face022.jpg'},
        {'face': u'stimulus/Faces/face023.jpg'},
        {'face': u'stimulus/Faces/face024.jpg'},
        {'face': u'stimulus/Faces/face025.jpg'},
        {'face': u'stimulus/Faces/face026.jpg'},
        {'face': u'stimulus/Faces/face027.jpg'},
        {'face': u'stimulus/Faces/face028.jpg'},
        {'face': u'stimulus/Faces/face029.jpg'},
        {'face': u'stimulus/Faces/face030.jpg'},
        {'face': u'stimulus/Faces/face031.jpg'},
        {'face': u'stimulus/Faces/face032.jpg'},
        {'face': u'stimulus/Faces/face033.jpg'},
        {'face': u'stimulus/Faces/face034.jpg'},
        {'face': u'stimulus/Faces/face035.jpg'},
        {'face': u'stimulus/Faces/face036.jpg'},
        {'face': u'stimulus/Faces/face037.jpg'}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
      LoopInitiator second_stimlist loopType="TrialHandler"
        conditionsFile = conditions/fouse_stimuli_scenelist.csv
        random seed = seed_placeholder
        loopType = random
        nReps = 1
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        conditions:
          [{'scene': u'stimulus/Scenes/scene00.jpg'},
          {'scene': u'stimulus/Scenes/scene01.jpg'},
          {'scene': u'stimulus/Scenes/scene02.jpg'},
          {'scene': u'stimulus/Scenes/scene03.jpg'},
          {'scene': u'stimulus/Scenes/scene04.jpg'},
          {'scene': u'stimulus/Scenes/scene05.jpg'},
          {'scene': u'stimulus/Scenes/scene06.jpg'},
          {'scene': u'stimulus/Scenes/scene07.jpg'},
          {'scene': u'stimulus/Scenes/scene08.jpg'},
          {'scene': u'stimulus/Scenes/scene09.jpg'},
          {'scene': u'stimulus/Scenes/scene10.jpg'},
          {'scene': u'stimulus/Scenes/scene11.jpg'},
          {'scene': u'stimulus/Scenes/scene12.jpg'},
          {'scene': u'stimulus/Scenes/scene13.jpg'},
          {'scene': u'stimulus/Scenes/scene14.jpg'},
          {'scene': u'stimulus/Scenes/scene15.jpg'},
          {'scene': u'stimulus/Scenes/scene16.jpg'},
          {'scene': u'stimulus/Scenes/scene17.jpg'},
          {'scene': u'stimulus/Scenes/scene18.jpg'},
          {'scene': u'stimulus/Scenes/scene19.jpg'},
          {'scene': u'stimulus/Scenes/scene20.jpg'},
          {'scene': u'stimulus/Scenes/scene21.jpg'},
          {'scene': u'stimulus/Scenes/scene22.jpg'},
          {'scene': u'stimulus/Scenes/scene23.jpg'},
          {'scene': u'stimulus/Scenes/scene24.jpg'},
          {'scene': u'stimulus/Scenes/scene25.jpg'},
          {'scene': u'stimulus/Scenes/scene26.jpg'},
          {'scene': u'stimulus/Scenes/scene27.jpg'},
          {'scene': u'stimulus/Scenes/scene28.jpg'},
          {'scene': u'stimulus/Scenes/scene29.jpg'},
          {'scene': u'stimulus/Scenes/scene30.jpg'},
          {'scene': u'stimulus/Scenes/scene31.jpg'},
          {'scene': u'stimulus/Scenes/scene32.jpg'},
          {'scene': u'stimulus/Scenes/scene33.jpg'},
          {'scene': u'stimulus/Scenes/scene34.jpg'},
          {'scene': u'stimulus/Scenes/scene35.jpg'}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
        Routine fixation_2
        Routine blocks
      LoopTerminator second_stimlist
    LoopTerminator primary_stimlist
  LoopTerminator stimulus_type
