PsychoPy2experiment version="1.76.00"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = rtfousewithfeedback
  logging level = debug
  Units = use prefs
  Screen = 1
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Routines
  Routine Transition
    ImageComponent image
      opacity = 0
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.0
      size = [0.5, 0.5]
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  Routine end
    TextComponent text_5_end
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Good Job!

        Get ready for the next run!
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    TextComponent text_6
      text [set every repeat] = $run_num
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_5
      Begin Routine:
        rt.save(filename[:-5]+'_run_%s'%expInfo['session']+'.npz',Feedbacks,Targets)
        rt.close()
  Routine baseline
    ImageComponent image_4
      stopVal [duration (s)] = 30
      startVal [time (s)] = 0.0
      image = stimulus/fixation.png
      size = [2,2]
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  Routine stimulus
    PatchComponent face_image
      opacity = .5
      stopVal [duration (s)] = 11.5
      sf = None
      startVal [time (s)] = 0.0
      image [set every repeat] = $face
      size = [1,1]
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    ImageComponent scene_image
      opacity = .5
      stopVal [duration (s)] = 11.5
      startVal [time (s)] = 0.0
      image [set every repeat] = $scene
      size = [1, 1]
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    TextComponent text_5_fake
      opacity = 0
      color = grey
      text [set every repeat] = $face
      stopVal [duration (s)] = 0.0
      pos = [0, 1]
      startVal [time (s)] = 0.0
      letterHeight = 0.0
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    CodeComponent code_2
      Begin Routine:
        blockcount= blockcount+1
        print scene
        print face
      End Routine:
        for idx,i in enumerate(scene_loop.trialList):
                 name=str(scene_loop.trialList[idx])
                 if scene in name:
                     del scene_loop.trialList[idx]
        for idx,i in enumerate(face_loop.trialList):
                 name=str(face_loop.trialList[idx])
                 if face in name:
                     del face_loop.trialList[idx]
        if blockcount==3:
            face_loop.finished=1
            scene_loop.finished=1
  Routine instruction
    TextComponent instr
      text [set every repeat] = $instruction_text
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_3
      End Routine:
        blockcount=0
  Routine feedback
    PatchComponent patch_2
      opacity [set every repeat] = 1
      stopVal [duration (s)] = 4
      pos = [0, 0.75]
      sf = None
      startVal [time (s)] = 0.0
      image [set every repeat] = $image
      size = [0.25, 0.25]
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    CodeComponent code
      Begin Experiment:
        def extract(rt,dr,mask='active'):
            trials = np.asarray(rt.trial_type[mask])
            data = np.asarray(rt.data[mask])
            if (trials==dr).any():
                return data[trials==dr].tolist()
            else:
                return []
      Each Frame:
        t = ThermBase(win, [0.25,1],[-0.125,-0.5])
        if FB:
            t.plot(fb,th,arrow,frameN)
        t.draw()
      Begin Routine:
        rtdata = rt.check(arrow)[0]
        fb = get_feedback(rt,arrow,7)
        Feedbacks[arrow].append(fb)

        if FB:
            th = get_target(Feedbacks,arrow)
        Targets[arrow].append(th)
      End Routine:
        rt.check(arrow+'_fb')
  Routine fixation
    ImageComponent image_2
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      image = stimulus/fixation.png
      size = [1,1]
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  Routine pretrigger_instr
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Instructions:

        You will be presented with images blends of faces and scenes.

        - When instructed to attend to house, focus on the house image.

        - When instructed to attend to face, focus on the face image.

        - When instructed to passively view, do not focus on either face or house.

        During this run, you will receive feedback after each block on your ability to attend
        Experimenter press spacebar to continue
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trigger
    TextComponent text
      text = Waiting for scanner trigger ...
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_2
    ImageComponent image_3
      stopVal [duration (s)] = 1
      startVal [time (s)] = 10
      image = stimulus/fixation.png
      size = [1,1]
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Flow
  Routine pretrigger_instr
  Routine trigger
  Routine baseline
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions/fouse_conditions.csv
    random seed = placeholder3
    loopType = sequential
    nReps = 5
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    conditions:
      [{'instruction_text': u'Attend to Houses'},
      {'instruction_text': u'Passively View '},
      {'instruction_text': u'Attend to Faces'},
      {'instruction_text': u'Attend to Houses'},
      {'instruction_text': u'Attend to Faces'}]
    Routine instruction
    LoopInitiator face_loop loopType="TrialHandler"
      conditionsFile = conditions/fouse_stimuli_facelist.xlsx
      random seed = placeholder2
      loopType = random
      nReps = 1
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      conditions:
        [{u'face': u'stimulus/Faces/face000.jpg'},
        {u'face': u'stimulus/Faces/face001.jpg'},
        {u'face': u'stimulus/Faces/face002.jpg'},
        {u'face': u'stimulus/Faces/face003.jpg'},
        {u'face': u'stimulus/Faces/face004.jpg'},
        {u'face': u'stimulus/Faces/face005.jpg'},
        {u'face': u'stimulus/Faces/face006.jpg'},
        {u'face': u'stimulus/Faces/face007.jpg'},
        {u'face': u'stimulus/Faces/face008.jpg'},
        {u'face': u'stimulus/Faces/face009.jpg'},
        {u'face': u'stimulus/Faces/face010.jpg'},
        {u'face': u'stimulus/Faces/face011.jpg'},
        {u'face': u'stimulus/Faces/face012.jpg'},
        {u'face': u'stimulus/Faces/face013.jpg'},
        {u'face': u'stimulus/Faces/face014.jpg'},
        {u'face': u'stimulus/Faces/face015.jpg'},
        {u'face': u'stimulus/Faces/face016.jpg'},
        {u'face': u'stimulus/Faces/face017.jpg'},
        {u'face': u'stimulus/Faces/face018.jpg'},
        {u'face': u'stimulus/Faces/face019.jpg'},
        {u'face': u'stimulus/Faces/face020.jpg'},
        {u'face': u'stimulus/Faces/face021.jpg'},
        {u'face': u'stimulus/Faces/face022.jpg'},
        {u'face': u'stimulus/Faces/face023.jpg'},
        {u'face': u'stimulus/Faces/face024.jpg'},
        {u'face': u'stimulus/Faces/face025.jpg'},
        {u'face': u'stimulus/Faces/face026.jpg'},
        {u'face': u'stimulus/Faces/face027.jpg'},
        {u'face': u'stimulus/Faces/face028.jpg'},
        {u'face': u'stimulus/Faces/face029.jpg'},
        {u'face': u'stimulus/Faces/face030.jpg'},
        {u'face': u'stimulus/Faces/face031.jpg'},
        {u'face': u'stimulus/Faces/face032.jpg'},
        {u'face': u'stimulus/Faces/face033.jpg'},
        {u'face': u'stimulus/Faces/face034.jpg'},
        {u'face': u'stimulus/Faces/face035.jpg'},
        {u'face': u'stimulus/Faces/face036.jpg'}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
      LoopInitiator scene_loop loopType="TrialHandler"
        conditionsFile = conditions/fouse_stimuli_scenelist.xlsx
        random seed = placeholder1
        loopType = random
        nReps = 1
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        conditions:
          [{u'scene': u'stimulus/Scenes/scene00.jpg'},
          {u'scene': u'stimulus/Scenes/scene01.jpg'},
          {u'scene': u'stimulus/Scenes/scene02.jpg'},
          {u'scene': u'stimulus/Scenes/scene03.jpg'},
          {u'scene': u'stimulus/Scenes/scene04.jpg'},
          {u'scene': u'stimulus/Scenes/scene05.jpg'},
          {u'scene': u'stimulus/Scenes/scene06.jpg'},
          {u'scene': u'stimulus/Scenes/scene07.jpg'},
          {u'scene': u'stimulus/Scenes/scene08.jpg'},
          {u'scene': u'stimulus/Scenes/scene09.jpg'},
          {u'scene': u'stimulus/Scenes/scene10.jpg'},
          {u'scene': u'stimulus/Scenes/scene11.jpg'},
          {u'scene': u'stimulus/Scenes/scene12.jpg'},
          {u'scene': u'stimulus/Scenes/scene13.jpg'},
          {u'scene': u'stimulus/Scenes/scene14.jpg'},
          {u'scene': u'stimulus/Scenes/scene15.jpg'},
          {u'scene': u'stimulus/Scenes/scene16.jpg'},
          {u'scene': u'stimulus/Scenes/scene17.jpg'},
          {u'scene': u'stimulus/Scenes/scene18.jpg'},
          {u'scene': u'stimulus/Scenes/scene19.jpg'},
          {u'scene': u'stimulus/Scenes/scene20.jpg'},
          {u'scene': u'stimulus/Scenes/scene21.jpg'},
          {u'scene': u'stimulus/Scenes/scene22.jpg'},
          {u'scene': u'stimulus/Scenes/scene23.jpg'},
          {u'scene': u'stimulus/Scenes/scene24.jpg'},
          {u'scene': u'stimulus/Scenes/scene25.jpg'},
          {u'scene': u'stimulus/Scenes/scene26.jpg'},
          {u'scene': u'stimulus/Scenes/scene27.jpg'},
          {u'scene': u'stimulus/Scenes/scene28.jpg'},
          {u'scene': u'stimulus/Scenes/scene29.jpg'},
          {u'scene': u'stimulus/Scenes/scene30.jpg'},
          {u'scene': u'stimulus/Scenes/scene31.jpg'},
          {u'scene': u'stimulus/Scenes/scene32.jpg'},
          {u'scene': u'stimulus/Scenes/scene33.jpg'},
          {u'scene': u'stimulus/Scenes/scene34.jpg'}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
        Routine Transition
        Routine stimulus
      LoopTerminator scene_loop
    LoopTerminator face_loop
    Routine fixation
    Routine feedback
    Routine fixation_2
  LoopTerminator trials
  Routine end
